CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Sample>[A-Z]{1}[0-9]{1,3})_(?P<Well>[B-O]{1}[0-9]{1,2})(?P<TimePt>T_[0-9]{1,3})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file doesnot contain "Probabilities")
    Name to assign these images:Raw
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Probabilities_0")
    Name to assign these images:CellMask
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Probabilities_1")
    Name to assign these images:BgMask
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Sample
    Metadata category:Well

Crop:[module_num:5|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
    Select the input image:Raw
    Name the output image:CropRaw
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:30,-30
    Top and bottom rectangle positions:30,-30
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:6|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
    Select the input image:BgMask
    Name the output image:CropBgMask
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:30,-30
    Top and bottom rectangle positions:30,-30
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:7|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
    Select the input image:CellMask
    Name the output image:CropCellMask
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:30,-30
    Top and bottom rectangle positions:30,-30
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    Remove empty rows and columns?:Edges
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
MaskImage:[module_num:8|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
    Select the input image:CropRaw
    Name the output image:MaskCropRaw
    Use objects or an image as a mask?:Image
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    Select image for mask:CropCellMask
    Invert the mask?:No

MeasureImageQuality:[module_num:9|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:4
    Threshold count:1
    Select the images to measure:CropRaw, MaskCropRaw, Raw
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:50
    Spatial scale for blur measurements:150
    Spatial scale for blur measurements:300
    Spatial scale for blur measurements:450
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:Yes
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
MeasureTexture:[module_num:10|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
    Select images to measure:CropRaw, MaskCropRaw
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    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Images
    Texture scale to measure:3

MeasureGranularity:[module_num:11|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
    Select images to measure:CropRaw, MaskCropRaw
    Measure within objects?:No
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    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

Threshold:[module_num:12|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
    Select the input image:CropCellMask
    Name the output image:Threshold_CropCellMask
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.6,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:6
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    Thresholding method:Minimum Cross-Entropy

MeasureImageAreaOccupied:[module_num:13|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
    Measure the area occupied by:Binary Image
    Select binary images to measure:Threshold_CropCellMask
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
ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Research/Projects_Experiments/ComputationalImagingAnalysis/CellProfiler_Results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:G583_mediaOnly_fullDataset
    Overwrite existing files without warning?:No
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